<?xml version="1.0" encoding="UTF-8"?>
<!--
Generated by Harmonia — DO NOT HAND-EDIT (regenerated from dataset/ in CI).
PROHIBITED — research / safety-methodology / education only; not a regulatory determination
This model is a REDUCED reference kernel of the O'Hara-Rudy lineage; it is
research / education infrastructure, not a regulatory or clinical tool.
Primary sources: https://doi.org/10.7554/eLife.48890
-->
<model xmlns="http://www.cellml.org/cellml/2.0#" xmlns:cellml="http://www.cellml.org/cellml/2.0#" name="harmonia_tor_ord">
  <units name="mS_per_uF"><unit units="siemens" prefix="milli"/><unit units="farad" prefix="micro" exponent="-1"/></units>
  <units name="mV"><unit units="volt" prefix="milli"/></units>
  <units name="ms"><unit units="second" prefix="milli"/></units>
  <units name="uA_per_uF"><unit units="ampere" prefix="micro"/><unit units="farad" prefix="micro" exponent="-1"/></units>
  <units name="uF_per_cm2"><unit units="farad" prefix="micro"/><unit units="metre" prefix="centi" exponent="-2"/></units>
  <component name="cell">
    <variable name="time" units="ms"/>
    <variable name="Cm" units="uF_per_cm2" initial_value="1.0"/>
    <variable name="ENa" units="mV" initial_value="70.0"/>
    <variable name="EK" units="mV" initial_value="-87.0"/>
    <variable name="EKs" units="mV" initial_value="-80.0"/>
    <variable name="ECaL" units="mV" initial_value="45.0"/>
    <variable name="ENCX" units="mV" initial_value="-10.0"/>
    <variable name="gNa" units="mS_per_uF" initial_value="11.0"/>
    <variable name="gNaL" units="mS_per_uF" initial_value="0.051"/>
    <variable name="gto" units="mS_per_uF" initial_value="0.18"/>
    <variable name="gCaL" units="mS_per_uF" initial_value="0.15400000000000003"/>
    <variable name="gKr" units="mS_per_uF" initial_value="0.27"/>
    <variable name="gKs" units="mS_per_uF" initial_value="0.045"/>
    <variable name="gK1" units="mS_per_uF" initial_value="0.34"/>
    <variable name="gNaCa" units="mS_per_uF" initial_value="0.03"/>
    <variable name="stim_amplitude" units="uA_per_uF" initial_value="-52.0"/>
    <variable name="stim_duration" units="ms" initial_value="1.0"/>
    <variable name="stim_period" units="ms" initial_value="2000.0"/>
    <variable name="block_INa" units="dimensionless" initial_value="1.0"/>
    <variable name="block_INaL" units="dimensionless" initial_value="1.0"/>
    <variable name="block_Ito" units="dimensionless" initial_value="1.0"/>
    <variable name="block_ICaL" units="dimensionless" initial_value="1.0"/>
    <variable name="block_IKr" units="dimensionless" initial_value="1.0"/>
    <variable name="block_IKs" units="dimensionless" initial_value="1.0"/>
    <variable name="V" units="mV" initial_value="-85.0"/>
    <variable name="m" units="dimensionless" initial_value="0.0031726828424851893"/>
    <variable name="h" units="dimensionless" initial_value="0.9378643669135703"/>
    <variable name="j" units="dimensionless" initial_value="0.9378643669135703"/>
    <variable name="mL" units="dimensionless" initial_value="0.005220125693558397"/>
    <variable name="hL" units="dimensionless" initial_value="0.5"/>
    <variable name="a" units="dimensionless" initial_value="0.0039372280939690045"/>
    <variable name="iF" units="dimensionless" initial_value="0.9964063974185798"/>
    <variable name="d" units="dimensionless" initial_value="1.9133238744270502e-06"/>
    <variable name="f" units="dimensionless" initial_value="0.9997616091118722"/>
    <variable name="xr" units="dimensionless" initial_value="0.000295957113513077"/>
    <variable name="xs" units="dimensionless" initial_value="0.008279043875619086"/>
    <variable name="m_inf" units="dimensionless"/>
    <variable name="m_tau" units="ms"/>
    <variable name="h_inf" units="dimensionless"/>
    <variable name="h_tau" units="ms"/>
    <variable name="j_inf" units="dimensionless"/>
    <variable name="j_tau" units="ms"/>
    <variable name="mL_inf" units="dimensionless"/>
    <variable name="mL_tau" units="ms"/>
    <variable name="hL_inf" units="dimensionless"/>
    <variable name="hL_tau" units="ms"/>
    <variable name="a_inf" units="dimensionless"/>
    <variable name="a_tau" units="ms"/>
    <variable name="iF_inf" units="dimensionless"/>
    <variable name="iF_tau" units="ms"/>
    <variable name="d_inf" units="dimensionless"/>
    <variable name="d_tau" units="ms"/>
    <variable name="f_inf" units="dimensionless"/>
    <variable name="f_tau" units="ms"/>
    <variable name="xr_inf" units="dimensionless"/>
    <variable name="xr_tau" units="ms"/>
    <variable name="xs_inf" units="dimensionless"/>
    <variable name="xs_tau" units="ms"/>
    <variable name="Rkr" units="dimensionless"/>
    <variable name="xK1_inf" units="dimensionless"/>
    <variable name="wncx" units="dimensionless"/>
    <variable name="INa" units="uA_per_uF"/>
    <variable name="INaL" units="uA_per_uF"/>
    <variable name="Ito" units="uA_per_uF"/>
    <variable name="ICaL" units="uA_per_uF"/>
    <variable name="IKr" units="uA_per_uF"/>
    <variable name="IKs" units="uA_per_uF"/>
    <variable name="IK1" units="uA_per_uF"/>
    <variable name="INaCa" units="uA_per_uF"/>
    <variable name="i_ion" units="uA_per_uF"/>
    <variable name="i_stim" units="uA_per_uF"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply><eq/><ci>m_inf</ci><apply><divide/><cn cellml:units="dimensionless">1</cn><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><exp/><apply><divide/><apply><minus/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">-39</cn></apply></apply><cn cellml:units="dimensionless">8</cn></apply></apply></apply></apply></apply>
      <apply><eq/><ci>m_tau</ci><apply><plus/><cn cellml:units="dimensionless">0.06</cn><apply><times/><cn cellml:units="dimensionless">0.55</cn><apply><exp/><apply><minus/><apply><power/><apply><divide/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">-40</cn></apply><cn cellml:units="dimensionless">20</cn></apply><cn cellml:units="dimensionless">2</cn></apply></apply></apply></apply></apply></apply>
      <apply><eq/><ci>h_inf</ci><apply><divide/><cn cellml:units="dimensionless">1</cn><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><exp/><apply><divide/><apply><minus/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">-66</cn></apply></apply><cn cellml:units="dimensionless">-7</cn></apply></apply></apply></apply></apply>
      <apply><eq/><ci>h_tau</ci><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><times/><cn cellml:units="dimensionless">18</cn><apply><exp/><apply><minus/><apply><power/><apply><divide/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">-50</cn></apply><cn cellml:units="dimensionless">15</cn></apply><cn cellml:units="dimensionless">2</cn></apply></apply></apply></apply></apply></apply>
      <apply><eq/><ci>j_inf</ci><apply><divide/><cn cellml:units="dimensionless">1</cn><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><exp/><apply><divide/><apply><minus/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">-66</cn></apply></apply><cn cellml:units="dimensionless">-7</cn></apply></apply></apply></apply></apply>
      <apply><eq/><ci>j_tau</ci><apply><plus/><cn cellml:units="dimensionless">12</cn><apply><times/><cn cellml:units="dimensionless">60</cn><apply><exp/><apply><minus/><apply><power/><apply><divide/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">-60</cn></apply><cn cellml:units="dimensionless">20</cn></apply><cn cellml:units="dimensionless">2</cn></apply></apply></apply></apply></apply></apply>
      <apply><eq/><ci>mL_inf</ci><apply><divide/><cn cellml:units="dimensionless">1</cn><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><exp/><apply><divide/><apply><minus/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">-43</cn></apply></apply><cn cellml:units="dimensionless">8</cn></apply></apply></apply></apply></apply>
      <apply><eq/><ci>mL_tau</ci><apply><plus/><cn cellml:units="dimensionless">0.1</cn><apply><times/><cn cellml:units="dimensionless">0.5</cn><apply><exp/><apply><minus/><apply><power/><apply><divide/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">-40</cn></apply><cn cellml:units="dimensionless">20</cn></apply><cn cellml:units="dimensionless">2</cn></apply></apply></apply></apply></apply></apply>
      <apply><eq/><ci>hL_inf</ci><apply><divide/><cn cellml:units="dimensionless">1</cn><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><exp/><apply><divide/><apply><minus/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">-85</cn></apply></apply><cn cellml:units="dimensionless">-7</cn></apply></apply></apply></apply></apply>
      <apply><eq/><ci>hL_tau</ci><cn cellml:units="dimensionless">200</cn></apply>
      <apply><eq/><ci>a_inf</ci><apply><divide/><cn cellml:units="dimensionless">1</cn><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><exp/><apply><divide/><apply><minus/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">-2</cn></apply></apply><cn cellml:units="dimensionless">15</cn></apply></apply></apply></apply></apply>
      <apply><eq/><ci>a_tau</ci><apply><plus/><cn cellml:units="dimensionless">1.5</cn><apply><times/><cn cellml:units="dimensionless">5</cn><apply><exp/><apply><minus/><apply><power/><apply><divide/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">-30</cn></apply><cn cellml:units="dimensionless">30</cn></apply><cn cellml:units="dimensionless">2</cn></apply></apply></apply></apply></apply></apply>
      <apply><eq/><ci>iF_inf</ci><apply><divide/><cn cellml:units="dimensionless">1</cn><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><exp/><apply><divide/><apply><minus/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">-40</cn></apply></apply><cn cellml:units="dimensionless">-8</cn></apply></apply></apply></apply></apply>
      <apply><eq/><ci>iF_tau</ci><apply><plus/><cn cellml:units="dimensionless">18</cn><apply><times/><cn cellml:units="dimensionless">35</cn><apply><exp/><apply><minus/><apply><power/><apply><divide/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">-40</cn></apply><cn cellml:units="dimensionless">25</cn></apply><cn cellml:units="dimensionless">2</cn></apply></apply></apply></apply></apply></apply>
      <apply><eq/><ci>d_inf</ci><apply><divide/><cn cellml:units="dimensionless">1</cn><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><exp/><apply><divide/><apply><minus/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">-6</cn></apply></apply><cn cellml:units="dimensionless">6</cn></apply></apply></apply></apply></apply>
      <apply><eq/><ci>d_tau</ci><apply><plus/><cn cellml:units="dimensionless">1.5</cn><apply><times/><cn cellml:units="dimensionless">8</cn><apply><exp/><apply><minus/><apply><power/><apply><divide/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">-10</cn></apply><cn cellml:units="dimensionless">25</cn></apply><cn cellml:units="dimensionless">2</cn></apply></apply></apply></apply></apply></apply>
      <apply><eq/><ci>f_inf</ci><apply><plus/><cn cellml:units="dimensionless">0.18</cn><apply><times/><cn cellml:units="dimensionless">0.82</cn><apply><divide/><cn cellml:units="dimensionless">1</cn><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><exp/><apply><divide/><apply><minus/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">-28</cn></apply></apply><cn cellml:units="dimensionless">-7</cn></apply></apply></apply></apply></apply></apply></apply>
      <apply><eq/><ci>f_tau</ci><apply><plus/><cn cellml:units="dimensionless">25</cn><apply><times/><cn cellml:units="dimensionless">120</cn><apply><exp/><apply><minus/><apply><power/><apply><divide/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">-25</cn></apply><cn cellml:units="dimensionless">25</cn></apply><cn cellml:units="dimensionless">2</cn></apply></apply></apply></apply></apply></apply>
      <apply><eq/><ci>xr_inf</ci><apply><divide/><cn cellml:units="dimensionless">1</cn><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><exp/><apply><divide/><apply><minus/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">-20</cn></apply></apply><cn cellml:units="dimensionless">8</cn></apply></apply></apply></apply></apply>
      <apply><eq/><ci>xr_tau</ci><apply><plus/><cn cellml:units="dimensionless">40</cn><apply><times/><cn cellml:units="dimensionless">180</cn><apply><exp/><apply><minus/><apply><power/><apply><divide/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">-10</cn></apply><cn cellml:units="dimensionless">30</cn></apply><cn cellml:units="dimensionless">2</cn></apply></apply></apply></apply></apply></apply>
      <apply><eq/><ci>xs_inf</ci><apply><divide/><cn cellml:units="dimensionless">1</cn><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><exp/><apply><divide/><apply><minus/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">-18</cn></apply></apply><cn cellml:units="dimensionless">14</cn></apply></apply></apply></apply></apply>
      <apply><eq/><ci>xs_tau</ci><apply><plus/><cn cellml:units="dimensionless">80</cn><apply><times/><cn cellml:units="dimensionless">350</cn><apply><exp/><apply><minus/><apply><power/><apply><divide/><apply><minus/><ci>V</ci><cn cellml:units="dimensionless">10</cn></apply><cn cellml:units="dimensionless">40</cn></apply><cn cellml:units="dimensionless">2</cn></apply></apply></apply></apply></apply></apply>
      <apply><eq/><ci>Rkr</ci><apply><divide/><cn cellml:units="dimensionless">1</cn><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><exp/><apply><divide/><apply><plus/><ci>V</ci><cn cellml:units="dimensionless">70</cn></apply><cn cellml:units="dimensionless">25</cn></apply></apply></apply></apply></apply>
      <apply><eq/><ci>xK1_inf</ci><apply><divide/><cn cellml:units="dimensionless">1</cn><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><exp/><apply><divide/><apply><plus/><ci>V</ci><cn cellml:units="dimensionless">100</cn></apply><cn cellml:units="dimensionless">12</cn></apply></apply></apply></apply></apply>
      <apply><eq/><ci>wncx</ci><apply><divide/><cn cellml:units="dimensionless">1</cn><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><exp/><apply><divide/><apply><minus/><apply><plus/><ci>V</ci><cn cellml:units="dimensionless">30</cn></apply></apply><cn cellml:units="dimensionless">20</cn></apply></apply></apply></apply></apply>
      <apply><eq/><ci>INa</ci><apply><times/><apply><times/><apply><times/><apply><times/><apply><times/><ci>gNa</ci><apply><power/><ci>m</ci><cn cellml:units="dimensionless">3</cn></apply></apply><ci>h</ci></apply><ci>j</ci></apply><apply><minus/><ci>V</ci><ci>ENa</ci></apply></apply><ci>block_INa</ci></apply></apply>
      <apply><eq/><ci>INaL</ci><apply><times/><apply><times/><apply><times/><apply><times/><ci>gNaL</ci><ci>mL</ci></apply><ci>hL</ci></apply><apply><minus/><ci>V</ci><ci>ENa</ci></apply></apply><ci>block_INaL</ci></apply></apply>
      <apply><eq/><ci>Ito</ci><apply><times/><apply><times/><apply><times/><apply><times/><ci>gto</ci><ci>a</ci></apply><ci>iF</ci></apply><apply><minus/><ci>V</ci><ci>EK</ci></apply></apply><ci>block_Ito</ci></apply></apply>
      <apply><eq/><ci>ICaL</ci><apply><times/><apply><times/><apply><times/><apply><times/><ci>gCaL</ci><ci>d</ci></apply><ci>f</ci></apply><apply><minus/><ci>V</ci><ci>ECaL</ci></apply></apply><ci>block_ICaL</ci></apply></apply>
      <apply><eq/><ci>IKr</ci><apply><times/><apply><times/><apply><times/><apply><times/><ci>gKr</ci><ci>xr</ci></apply><ci>Rkr</ci></apply><apply><minus/><ci>V</ci><ci>EK</ci></apply></apply><ci>block_IKr</ci></apply></apply>
      <apply><eq/><ci>IKs</ci><apply><times/><apply><times/><apply><times/><ci>gKs</ci><apply><power/><ci>xs</ci><cn cellml:units="dimensionless">2</cn></apply></apply><apply><minus/><ci>V</ci><ci>EKs</ci></apply></apply><ci>block_IKs</ci></apply></apply>
      <apply><eq/><ci>IK1</ci><apply><times/><apply><times/><ci>gK1</ci><ci>xK1_inf</ci></apply><apply><minus/><ci>V</ci><ci>EK</ci></apply></apply></apply>
      <apply><eq/><ci>INaCa</ci><apply><times/><apply><times/><ci>gNaCa</ci><ci>wncx</ci></apply><apply><minus/><ci>V</ci><ci>ENCX</ci></apply></apply></apply>
      <apply><eq/><ci>i_ion</ci><apply><plus/><apply><plus/><apply><plus/><apply><plus/><apply><plus/><apply><plus/><apply><plus/><ci>INa</ci><ci>INaL</ci></apply><ci>Ito</ci></apply><ci>ICaL</ci></apply><ci>IKr</ci></apply><ci>IKs</ci></apply><ci>IK1</ci></apply><ci>INaCa</ci></apply></apply>
      <apply><eq/><ci>i_stim</ci><piecewise><piece><ci>stim_amplitude</ci><apply><lt/><apply><minus/><ci>time</ci><apply><times/><apply><floor/><apply><divide/><ci>time</ci><ci>stim_period</ci></apply></apply><ci>stim_period</ci></apply></apply><ci>stim_duration</ci></apply></piece><otherwise><cn cellml:units="dimensionless">0</cn></otherwise></piecewise></apply>
      <apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>V</ci></apply><apply><divide/><apply><minus/><apply><plus/><ci>i_ion</ci><ci>i_stim</ci></apply></apply><ci>Cm</ci></apply></apply>
      <apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>m</ci></apply><apply><divide/><apply><minus/><ci>m_inf</ci><ci>m</ci></apply><ci>m_tau</ci></apply></apply>
      <apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>h</ci></apply><apply><divide/><apply><minus/><ci>h_inf</ci><ci>h</ci></apply><ci>h_tau</ci></apply></apply>
      <apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>j</ci></apply><apply><divide/><apply><minus/><ci>j_inf</ci><ci>j</ci></apply><ci>j_tau</ci></apply></apply>
      <apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>mL</ci></apply><apply><divide/><apply><minus/><ci>mL_inf</ci><ci>mL</ci></apply><ci>mL_tau</ci></apply></apply>
      <apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>hL</ci></apply><apply><divide/><apply><minus/><ci>hL_inf</ci><ci>hL</ci></apply><ci>hL_tau</ci></apply></apply>
      <apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>a</ci></apply><apply><divide/><apply><minus/><ci>a_inf</ci><ci>a</ci></apply><ci>a_tau</ci></apply></apply>
      <apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>iF</ci></apply><apply><divide/><apply><minus/><ci>iF_inf</ci><ci>iF</ci></apply><ci>iF_tau</ci></apply></apply>
      <apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>d</ci></apply><apply><divide/><apply><minus/><ci>d_inf</ci><ci>d</ci></apply><ci>d_tau</ci></apply></apply>
      <apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>f</ci></apply><apply><divide/><apply><minus/><ci>f_inf</ci><ci>f</ci></apply><ci>f_tau</ci></apply></apply>
      <apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>xr</ci></apply><apply><divide/><apply><minus/><ci>xr_inf</ci><ci>xr</ci></apply><ci>xr_tau</ci></apply></apply>
      <apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>xs</ci></apply><apply><divide/><apply><minus/><ci>xs_inf</ci><ci>xs</ci></apply><ci>xs_tau</ci></apply></apply>
    </math>
  </component>
  <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"
           xmlns:bqbiol="http://biomodels.net/biology-qualifiers/"
           xmlns:dcterms="http://purl.org/dc/terms/"
           xmlns:harmonia="https://github.com/clay-good/harmonia/ns#">
    <rdf:Description rdf:about="#harmonia_tor_ord">
      <harmonia:clinicalUse>PROHIBITED — research / safety-methodology / education only; not a regulatory determination</harmonia:clinicalUse>
      <harmonia:confidenceTier>C</harmonia:confidenceTier>
      <harmonia:datasetVersion>0.8.2</harmonia:datasetVersion>
        <bqbiol:isDescribedBy rdf:resource="https://doi.org/10.7554/eLife.48890"/>
    </rdf:Description>
  </rdf:RDF>

</model>
